PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 0.1 experiment stroop ready
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    TextComponent text
      color [set every repeat] = $Colour
      letterHeight = 0.05
      pos = (10, 10)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word 
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $Correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for the participation. 
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/urvashibhansali/Documents/AU (1-4 years) /3rd Year/Semester 5 Monsoon 25-26/Lab in Psychology PSY310/Psychopy/Experiment 0.1 stroop effect.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'Colour': 'red', 'stimulus_condition': 'C', 'Correct_response': 'r'},
      {'word': 'RED', 'Colour': 'blue', 'stimulus_condition': 'I', 'Correct_response': 'b'},
      {'word': 'BLUE', 'Colour': 'red', 'stimulus_condition': 'I', 'Correct_response': 'r'},
      {'word': 'BLUE', 'Colour': 'blue', 'stimulus_condition': 'C', 'Correct_response': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
