PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 2nd exp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        # Check if this is the end of a 60-trial block
        if (trials.thisTrialN + 1) % 60 == 0:
            # Pause after every 60th trial
            continueRoutine = False
            # Show the pause screen
            thisExp.nextEntry()  # end the current trial's data entry
            pauseLoop = True
        else:
            pauseLoop = False
    TextComponent fix_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    PolygonComponent blank1_bg
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.2
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    TextComponent prime_text
      letterHeight = 0.10
      startVal [time (s)] = 0.45
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $prime
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    PolygonComponent blank2_bg
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.65
      stopVal [duration (s)] = 0.1
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    TextComponent target_text
      letterHeight = 0.05
      startVal [time (s)] = 0.75
      text [set every repeat] = $target
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    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.75
      storeCorrect = True
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        You will see short sentences on the screen.
        Press the RIGHT arrow if the sentence is GRAMMATICAL.
        Press the LEFT arrow if it is UNGRAMMATICAL.

        Try to respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pauseScreen
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        breakTrigger = False
      End Routine:
        # Only trigger after every 60 trials (and not at trial 0)
        if (trials.thisN + 1) % 60 == 0 and trials.thisN != 0:
            breakTrigger = True
        else:
            breakTrigger = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Take a short break! Press any key to continue.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you for partcipating. 
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  Routine feedback_incorrect
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    PolygonComponent redCross
      fillColor = $(1.0000, -1.0000, -1.0000)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine feedback_correct
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    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Routine:
        # Hide both first
        greenCircle.opacity = 0
        redCrosss.opacity = 0

        # Check saved value
        if key_resp == 1:
            greenCircle.opacity = 1
        else:
            redCrosss.opacity = 1
    PolygonComponent blank3_bg
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.8
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    PolygonComponent greenCircle
      fillColor = green
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent redCrosss
      fillColor = red
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine feedback_incorrect_2
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions file/stimuli_correctAnss.csv
    loopType = random
    nReps = 23
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    conditions:
      [OrderedDict([('prime', 'She does not like apples'), ('target', 'She does not like apples'), ('condition', 'repetition_related'), ('correctAns', 'right')]),
      OrderedDict([('prime', 'She does not like apples'), ('target', 'She not does like apples'), ('condition', 'repetition_unrelated'), ('correctAns', 'left')]),
      OrderedDict([('prime', 'She does not like apples'), ('target', 'She not does like apples'), ('condition', 'transposition_related'), ('correctAns', 'right')]),
      OrderedDict([('prime', 'She does not like apples'), ('target', 'She like does apples not'), ('condition', 'transposition_unrelated'), ('correctAns', 'left')]),
      OrderedDict([('prime', 'They have finished the work'), ('target', 'They have finished the work'), ('condition', 'repetition_related'), ('correctAns', 'right')]),
      OrderedDict([('prime', 'They have finished the work'), ('target', 'They finished have the work'), ('condition', 'repetition_unrelated'), ('correctAns', 'left')]),
      OrderedDict([('prime', 'They have finished the work'), ('target', 'They finished have the work'), ('condition', 'transposition_related'), ('correctAns', 'right')]),
      OrderedDict([('prime', 'They have finished the work'), ('target', 'They work the have finished'), ('condition', 'transposition_unrelated'), ('correctAns', 'left')]),
      OrderedDict([('prime', 'The boy can read fast'), ('target', 'The boy can read fast'), ('condition', 'repetition_related'), ('correctAns', 'right')])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
    Routine trial
  LoopTerminator trials
  Routine thanks
