PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Word Priming Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test_routine
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    TextComponent textText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = Click to submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/urvashibhansali/Documents/AU [Psych] (1-4 years) /3rd Year/Semester 5 Monsoon 25-26/PSY310/Lab Reports/WordPriming Experiment/Conditions file/Study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'camera'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'Laptop'},
      {'study_word': 'Chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'Pastry'},
      {'study_word': 'Case'},
      {'study_word': 'Cruise'},
      {'study_word': 'Keys'},
      {'study_word': 'Poster'},
      {'study_word': 'Police'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/urvashibhansali/Documents/AU [Psych] (1-4 years) /3rd Year/Semester 5 Monsoon 25-26/PSY310/Lab Reports/WordPriming Experiment/Conditions file/test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': '_a_e', 'Reference': 'vase', 'old_new': 'old'},
      {'test_word': 't_g_r', 'Reference': 'tiger', 'old_new': 'old '},
      {'test_word': '_oo_', 'Reference': 'book', 'old_new': 'old '},
      {'test_word': 'c_sh_o_n', 'Reference': 'cushion', 'old_new': 'old '},
      {'test_word': '_ia_n_', 'Reference': 'piano', 'old_new': 'old '},
      {'test_word': 'c_m_r_', 'Reference': 'camera', 'old_new': 'old '},
      {'test_word': '_o_s_', 'Reference': 'mouse', 'old_new': 'old '},
      {'test_word': 'o_a_n_e', 'Reference': 'orange', 'old_new': 'old '},
      {'test_word': 'l_pt_p', 'Reference': 'laptop', 'old_new': 'old '},
      {'test_word': '_ha_t', 'Reference': 'chart', 'old_new': 'old '},
      {'test_word': 't_hi_t', 'Reference': 'tshirt', 'old_new': 'old '},
      {'test_word': 'P_st_y', 'Reference': 'pastry', 'old_new': 'old '},
      {'test_word': 'c_s_', 'Reference': 'case', 'old_new': 'old '},
      {'test_word': '_ru_is_', 'Reference': 'cruise', 'old_new': 'old '},
      {'test_word': 'p_li_e', 'Reference': 'police', 'old_new': 'old '},
      {'test_word': 'k_y_', 'Reference': 'keys', 'old_new': 'old'},
      {'test_word': 'p_st_r', 'Reference': 'poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Reference': 'board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'Reference': 'marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'Reference': 'phone', 'old_new': 'new'},
      {'test_word': 'ta_l_', 'Reference': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Reference': 'pencil', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'Reference': 'bottle', 'old_new': 'new'}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
    Routine test_routine
  LoopTerminator trials_2
